PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = PFE
  eyetracker = Pupil Labs
  keyboardBackend = ioHub
  plCompanionAddress = neon.local
  plCompanionCameraCalibration = scene_camera.json
  plCompanionPort = 8080
  plCompanionRecordingEnabled = True
  plConfidenceThreshold = 0.8
  plPupilCaptureRecordingEnabled = True
  plPupilRemoteAddress = 127.0.0.1
  plPupilRemotePort = 50020
  plPupilRemoteTimeoutMs = 1000
  plPupillometryOnly = False
  plSurfaceName = psychopy_iohub_surface
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Routines
  Routine trial
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $videos
      size = (1, 1)
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  EyetrackerCalibrationRoutine calibration_2
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    textColor = white
    units = from exp settings
  EyetrackerCalibrationRoutine calibration_1
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    disabled = True
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine focus
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    ImageComponent image
      image [set every repeat] = $first_frame
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine questions
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Des questions vont vous être pausées
        [Espace] pour continuer
Flow
  EyetrackerCalibrationRoutine calibration_1
  LoopInitiator sessions loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = data.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('videos', 'video/Sphere_init1_speed1/delta1/0001-0150.avi'), ('first_frame', 'video/First_frame/Sphere_init1_speed1_delta1_0001-0150.jpg')]),
        OrderedDict([('videos', 'video/Sphere_init1_speed1/delta2/0001-0150.avi'), ('first_frame', 'video/First_frame/Sphere_init1_speed1_delta2_0001-0150.jpg')]),
        OrderedDict([('videos', 'video/Sphere_init1_speed1/original/0001-0150.avi'), ('first_frame', 'video/First_frame/Sphere_init1_speed1_original_0001-0150.jpg')]),
        OrderedDict([('videos', 'video/Sphere_init2_speed1/delta1/0001-0150.avi'), ('first_frame', 'video/First_frame/Sphere_init2_speed1_delta1_0001-0150.jpg')]),
        OrderedDict([('videos', 'video/Sphere_init2_speed1/delta2/0001-0150.avi'), ('first_frame', 'video/First_frame/Sphere_init2_speed1_delta2_0001-0150.jpg')]),
        OrderedDict([('videos', 'video/Sphere_init2_speed1/original/0001-0150.avi'), ('first_frame', 'video/First_frame/Sphere_init2_speed1_original_0001-0150.jpg')]),
        OrderedDict([('videos', 'video/Sphere_init3_speed1/delta1/0001-0150.avi'), ('first_frame', 'video/First_frame/Sphere_init3_speed1_delta1_0001-0150.jpg')]),
        OrderedDict([('videos', 'video/Sphere_init3_speed1/delta2/0001-0150.avi'), ('first_frame', 'video/First_frame/Sphere_init3_speed1_delta2_0001-0150.jpg')]),
        OrderedDict([('videos', 'video/Sphere_init3_speed1/original/0001-0150.avi'), ('first_frame', 'video/First_frame/Sphere_init3_speed1_original_0001-0150.jpg')])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
      Routine focus
      Routine trial
    LoopTerminator trials
    Routine questions
  LoopTerminator sessions
